PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'participant': u'', u'letter': u''}
  expName = StopSignal
  Units = use prefs
  Screen = 1
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Routines
  Routine PracInst
    TextComponent InstrText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to our study! In this task, you will see green arrows that point either left or right.
        As soon as you see the arrow, you should respond as QUICKLY AND ACCURATELY as possible by
        pressing the LEFT arrow key if the arrow points LEFT or the RIGHT arrow key if the arrow
        points RIGHT. On some trials, the green arrows may turn red.  If the arrow turns RED, you
        should STOP your response immediately and NOT RESPOND to that particular arrow. Still respond
        to the other green arrows after it, unless the arrow turns red. Both going and stopping are
        equally important. Your performance on this task will be measured equally by both how fast
        and accurately you respond.


        Press the LEFT arrow key to begin the practice trials.
    CodeComponent defining
      Begin Experiment:
        import random
        Green=["left_green.jpg", "right_green.jpg"]
        Red=["left_red.jpg", "right_red.jpg"]
        realTask=[0, 0, 0, 1]
        corrAns=""
        arrow=""
        arrow2=""
        rewardtask=0
        Overall=0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions2
    TextComponent Instr3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        BONUS INFORMATION!
        You now have an opportunity to earn a
        monetary bonus of up to $10 based on your
        performance on the rest of the task.  The
        bonus will be based on BOTH how quickly
        and accurately you respond on go trials
        AND how accurately you stop your response
        on stop trials.  Bonus amounts will usually
        appear after you correctly stop your response
        on stop trials.  However, if you respond too
        slowly or make too many mistakes on go trials,
        then you may not receive a bonus even if you
        correctly stop your response on stop trials.
        So, try your best to respond as quickly and
        accurately as possible on go trials AND stop
        your response on stop trials so you can earn
        as much money as possible.

        If you have any questions,
        please ask the experimenter now.


        If not, press either arrow key to continue.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent ActivateReward
      Begin Routine:
        rewardtask=1
  Routine ITI
    CodeComponent arrowgen
      Begin Experiment:
        outcome=""
        total=0
        corrAns=""
        choice=random.choice([1.2, 1.5, 1.8])
        change=random.choice([0.2, 0.3, 0.4])
        thisTrial=random.choice(realTask)
        if thisTrial==0:
            arrow=random.choice(Green)
            arrow2=arrow
            corrAns=arrow.partition("_")[0]

        elif thisTrial==1:
            arrow=random.choice(Green)
            if arrow=="left_green.jpg":
                arrow2="left_red.jpg"
            elif arrow=="right_green.jpg":
                arrow2="right_red.jpg"
            corrAns=""
      Begin Routine:
        reward=random.choice([0,1])
        choice=random.choice([1.2, 1.5, 1.8])
        change=random.choice([0.2, 0.3, 0.4])
        thisTrial=random.choice(realTask)
        if thisTrial==0:
            arrow=random.choice(Green)
            arrow2=arrow
            corrAns=arrow.partition("_")[0]

        elif thisTrial==1:
            arrow=random.choice(Green)
            if arrow=="left_green.jpg":
                arrow2="left_red.jpg"
            elif arrow=="right_green.jpg":
                arrow2="right_red.jpg"
            corrAns=""
    StaticComponent ISI
      stopVal [duration (s)] = $choice
      startVal [time (s)] = 0.0
    TextComponent Cross
      text = +
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = .5
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  Routine Debrief
    TextComponent DebriefText
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Practice
    KeyboardComponent KeyResp
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2.1
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
      store = first key
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    ImageComponent Arrow1
      stopVal [duration (s)] = $change + .5
      startVal [time (s)] = 0.0
      image [set every repeat] = $arrow
      size = [1, 1]
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    ImageComponent Arrow2
      stopVal [duration (s)] = 1.9
      startVal [time (s)] = $change
      image [set every repeat] = $arrow2
      size = [1, 1]
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    CodeComponent Record
      End Routine:
        thisExp.addData("ITI", choice)
        thisExp.addData("Changes", change)
        thisExp.addData("Arrow1", arrow)
        thisExp.addData("Arrow2", arrow2)
        thisExp.addData("StopTrial", thisTrial) # is it a stop trial?
        thisExp.addData("RewardTask", rewardtask) # does this task have reward?
        thisExp.addData("RewardActive", reward) # is the reward active?
        if rewardtask==0:
            thisExp.addData("GotDollar", 0)
        elif rewardtask==1:
            if thisTrial==1 and reward==1:
                thisExp.addData("GotDollar", 1)
            else:
                thisExp.addData("GotDollar", 0)
        else:
            thisExp.addData("GotDollar", 2)
        thisExp.addData("CumulativeBlock", total)
        thisExp.addData("CumulativeOverall", Overall)
        thisExp.addData("key_resp_trial.keys", KeyResp.keys)
        thisExp.addData("key_resp_trial.corr", KeyResp.corr)
        thisExp.addData("key_resp_trial.rt", KeyResp.rt)
  Routine Break
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        BREAK

        Great job!  Please take a brief break
        before continuing with the task.
    TextComponent text_2
      text = Press the spacebar to continue whenever you are ready!
      pos = [0, -.5]
      startVal [time (s)] = 5
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial
    KeyboardComponent key_resp_trial
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2.1
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
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    ImageComponent image1
      stopVal [duration (s)] = $change + .5
      startVal [time (s)] = 0.0
      image [set every repeat] = $arrow
      size = [1, 1]
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    ImageComponent image2
      stopVal [duration (s)] = 1.9
      startVal [time (s)] = $change
      image [set every repeat] = $arrow2
      size = [1, 1]
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    CodeComponent Reward
      End Routine:
        if reward==0:
            outcome=""
            total=total
            Overall=Overall
        elif reward==1 and arrow2.partition("_")[-1]=="red.jpg" and not key_resp_trial.keys:
            outcome="You earned $1"
            total=total+1
            Overall=Overall+1
        elif reward==1 and arrow2.partition("_")[-1]=="red.jpg" and key_resp_trial.keys:
            outcome=""
            total=total
            Overall=Overall
        elif reward==1 and arrow2.partition("_")[-1]=="green.jpg":
            outcome=""
            total=total
            Overall=Overall
        else:
            outcome="There was an error."
            total=total
            Overall=Overall
  Routine RewardBreak
    CodeComponent runningTotal
      End Routine:
        total=0
    TextComponent Banked
      text [set every repeat] = $u"So far, you've banked a total of\n%2.f dollar(s)." %Overall
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent Breatherender
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = .5
      store = nothing
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    TextComponent BreatherStarter
      pos = [0, -.5]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Feel free to take a break.
        Press space when you want to continue.
  Routine Instructions
    TextComponent InstrText2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have completed the practice trials.  We will now begin the test trials.
        Remember that both responding and stopping are equally important. Your
        performance on this task will be measured equally by both how fast and
        accurately you respond.


        If you have any questions before you begin the test phase,
        please ask the experimenter now.


        If not, press the RIGHT arrow key to begin the test trials.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Trial_2
  Routine Response
    TextComponent Feedback
      text [set every repeat] = $outcome
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent Recording
      Begin Routine:
        thisExp.addData("ITI", choice)
        thisExp.addData("Changes", change)
        thisExp.addData("Arrow1", arrow)
        thisExp.addData("Arrow2", arrow2)
        thisExp.addData("StopTrial", thisTrial) # is it a stop trial?
        thisExp.addData("RewardTask", rewardtask) # does this task have reward?
        thisExp.addData("RewardActive", reward) # is the reward active?
        if rewardtask==0:
            thisExp.addData("GotDollar", 0)
        elif rewardtask==1:
            if thisTrial==1 and reward==1:
                thisExp.addData("GotDollar", 1)
            else:
                thisExp.addData("GotDollar", 0)
        else:
            thisExp.addData("GotDollar", 2)
        thisExp.addData("CumulativeBlock", total)
        thisExp.addData("CumulativeOverall", Overall)
  Routine Earnings
    TextComponent EarningTotal
      text [set every repeat] = $u"All finished! You banked a total of\n%2.f dollar(s)." %Overall
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent Continue
      pos = [0, -.5]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please let the experimenter know
        that you have finished!
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine PracInst
  LoopInitiator trials_practice loopType="TrialHandler"
    loopType = random
    nReps = 12
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    Routine ITI
    Routine Practice
  LoopTerminator trials_practice
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Practice
  LoopTerminator trials
  Routine Break
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Practice
  LoopTerminator trials_2
  Routine Break
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Practice
  LoopTerminator trials_3
  Routine Break
  LoopInitiator trials_4 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Practice
  LoopTerminator trials_4
  Routine Break
  LoopInitiator trials_5 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Practice
  LoopTerminator trials_5
  Routine Break
  Routine Instructions2
  LoopInitiator trials_6 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Trial
    Routine Response
  LoopTerminator trials_6
  Routine RewardBreak
  LoopInitiator trials_7 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Trial
    Routine Response
  LoopTerminator trials_7
  Routine RewardBreak
  LoopInitiator trials_8 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Trial
    Routine Response
  LoopTerminator trials_8
  Routine RewardBreak
  LoopInitiator trials_9 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Trial
    Routine Response
  LoopTerminator trials_9
  Routine RewardBreak
  LoopInitiator trials_10 loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine ITI
    Routine Trial
    Routine Response
  LoopTerminator trials_10
  Routine Earnings
